(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// **************** Main Components **************************

(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalNearestNeighborInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")

(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "SimilarityTransform")
(Metric "AdvancedMattesMutualInformation")

// ***************** Transformation **************************

(AutomaticScalesEstimation "false")    
(Scales 100000 100000 1000 1 1 1 10000)
(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")

//
// ******************* Similarity measure *********************

(NumberOfHistogramBins 64)
(ErodeMask "false")

// ******************** Multiresolution **********************

(NumberOfResolutions 4)
(ImagePyramidSchedule 32 16 4 1)

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 2000)
(MaximumStepLength 1.0)
(RequiredRatioOfValidSamples 0.05)

// **************** Image sampling **********************

(NumberOfSpatialSamples 1000)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")

// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)

(DefaultPixelValue 0)
(WriteResultImage "true")
(ResultImagePixelType "short")
(ResultImageFormat "mhd")
